PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SEAL_LandmarkRecog
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent LandmarkImage
      image [set every repeat] = $image
      pos = (0, -.02)
      size = (0.6, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent Recog_Question
      letterHeight = 0.05
      pos = (0, .37)
      startVal [time (s)] = 0.0
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      text:
        Did you see this object?
    KeyboardComponent Recog_key_resp
      allowedKeys [set every repeat] = 'y','n'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -.43)
      startVal [time (s)] = 0.0
      text = Please press 'y' for yes and 'n' for no
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  Routine Welcome
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Welcome to the SEAL Landmark Recognition Task
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  Routine Instruction
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you will be presented with pictures of objects.

        Please indicate if you have seen these objects here at the Kemper Museum today.

        Press SPACEBAR to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank You for your participation in the SEAL Landmark Recognition Task. 
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Flow
  Routine Welcome
  Routine Instruction
  LoopInitiator Recog_trials loopType="TrialHandler"
    conditionsFile = LandmarkRecog_Stims.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'Recognition/Correct/Landmark_9.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Correct/Landmark_8.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Correct/Landmark_10.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Incorrect/Landmark_30.JPG', 'correct_key': 'n'},
      {'image': 'Recognition/Incorrect/Landmark_27.JPG', 'correct_key': 'n'},
      {'image': 'Recognition/Correct/Landmark_18.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Correct/Landmark_2.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Correct/Landmark_11.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Incorrect/Landmark_25.JPG', 'correct_key': 'n'},
      {'image': 'Recognition/Incorrect/Landmark_28.JPG', 'correct_key': 'n'},
      {'image': 'Recognition/Correct/Landmark_16.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Correct/Landmark_6.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Correct/Landmark_7.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Correct/Landmark_5.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Incorrect/Landmark_21.JPG', 'correct_key': 'n'},
      {'image': 'Recognition/Incorrect/Landmark_24.JPG', 'correct_key': 'n'},
      {'image': 'Recognition/Correct/Landmark_13.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Incorrect/Landmark_29.JPG', 'correct_key': 'n'},
      {'image': 'Recognition/Correct/Landmark_15.JPG', 'correct_key': 'y'},
      {'image': 'Recognition/Incorrect/Landmark_26.JPG', 'correct_key': 'n'},
      {'image': 'Recognition/Correct/Landmark_1.JPG', 'correct_key': 'y'}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
    Routine trial
  LoopTerminator Recog_trials
  Routine End
